PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = arm3_ET_builderv2
  keyboardBackend = ioHub
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Routines
  Routine instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are a day-trader at an financial asset management company. Your job is to look at hourly stock prices and decide whether a stock is increasing or decreasing in value relative to the beginning of the day.

        For each step, you can choose to sample more evidence (i.e. wait and view another hour's stock market data) by pressing RIGHT or you can commit to answer by pressing UP if you think the stock price at the end of the day will be higher than at the start or by pressing DOWN if you think the price will drop.

        Press SPACE to continue.
    KeyboardComponent space_bar
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine presentation
    CodeComponent getNormalRV
      Code Type = Both
      Before Experiment:
        import numpy as np
        DRIFT = 0.5
        SIG = 1
        stock = 0
        cont = True
        stocklist = []
        def flipCoin():
            return np.random.uniform()
        def getNormallyDistributedRandomNumber(DRIFT, SIG):
            return np.random.normal(DRIFT, SIG)

        coin = flipCoin()
        state = 1
        if coin > 0.5:
            state = -1
      Before JS Experiment:
        const DRIFT = 0.5;
        const SIG = 1;
        var stock = 0;
        var cont = true;
        var stocklist = [];

        function flipCoin() {
            return Math.random()
        }

        function boxMullerTransform() {
            const u1 = Math.random();
            const u2 = Math.random();

            const z0 = Math.sqrt(-2.0 * Math.log(u1)) * Math.cos(2.0 * Math.PI * u2);
            const z1 = Math.sqrt(-2.0 * Math.log(u1)) * Math.sin(2.0 * Math.PI * u2);

            return { z0, z1 };
        }

        function getNormallyDistributedRandomNumber(mean, stddev) {
            const { z0, _ } = boxMullerTransform();

            return z0 * stddev + mean;
        }

        var coin = flipCoin();
        var state = 1;
        if ((coin > 0.5)) {
            state = (- 1);
        }
      Begin Experiment:
        DRIFT = 0.5
        SIG = 1
        stock = 0
        cont = True
        stocklist = []
      Begin JS Experiment:
        const DRIFT = 0.5;
        const SIG = 1;
        var stock = 0;
        var cont = true;
        var stocklist = [];
      Begin JS Routine:
        X_t = getNormallyDistributedRandomNumber((state * DRIFT), SIG);
        if (cont) {
            stock = (stock + X_t);
            stocklist.push(stock);
        } else {
            stocklist = [];
            stock = X_t;
            stocklist.push(stock);
        }
      Begin Routine:
        X_t = getNormallyDistributedRandomNumber(state*DRIFT, SIG)
        if cont:
            stock = stock + X_t
            stocklist.append(stock)
        else:
            stocklist = []
            stock = X_t
            stocklist.append(stock)
    PolygonComponent stockline
      fillColor = white
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent stock_show
      letterHeight = 0.05
      startVal [condition] = cont == true
      text [set every repeat] = $stock
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    KeyboardComponent resp
      allowedKeys = 'up', 'down','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent whatNext
      Code Type = Both
      Before Experiment:
        score = 0
        EPS = 0.6
        Q = 0.6
        txt = ''
        REWARD = 3
        PUNISH = -1
        reward_shown = False

        def reward(run, correct_state, score):
            draw = flipCoin()
            success = draw <= Q
            cor = False
            txt = '+0'
            if run == 'up' and correct_state == 1:
                if success:
                    score += REWARD
                    txt = "+" + str(REWARD)
                cor = True
            elif run == 'down' and correct_state == 0:
                if success:
                    score += REWARD
                    txt = "+" + str(REWARD)
                cor = True
            else:
                if success:
                    score += PUNISH
                    txt = str(PUNISH)
            return cor, score, txt
      Before JS Experiment:
        var score = 0;
        var EPS = 0.6;
        var Q = 0.6;
        var txt = "";
        var correct = -1;
        var REWARD = 3;
        var PUNISH = (- 1);
        var reward_shown = false;
        function reward(run, correct_state, score) {
            var cor, draw, success;
            draw = flipCoin();
            success = (draw <= Q);
            cor = false;
            txt = "+0";
            if (((run === "up") && (correct_state === 1))) {
                if (success) {
                    score += REWARD;
                    txt = ("+" + REWARD.toString());
                }
                cor = true;
            } else {
                if (((run === "down") && (correct_state === 0))) {
                    if (success) {
                        score += REWARD;
                        txt = ("+" + REWARD.toString());
                    }
                    cor = true;
                } else {
                    if (success) {
                        score += PUNISH;
                        txt = PUNISH.toString();
                    }
                }
            }
            return [cor, score, txt];
        }
      End JS Routine:
        var thisResp = resp.keys;
        var actual_state = (state > 0);
        var reward_shown = false;
        if ((thisResp === "right")) {
            cont = true;
        } else {
            if (((thisResp === "up") || (thisResp === "down"))) {
                cont = false;
                [correct, score, txt] = reward(thisResp, actual_state, score);
                console.log(correct, score, txt);
                coin = flipCoin();
                if ((coin <= EPS)) {
                    state = ((- 1) * state);
                    console.log(coin, state);
                }
                reward_shown = true;
                X_t = getNormallyDistributedRandomNumber((state * DRIFT), SIG);
                stock = X_t;
            }
        }
      End Routine:
        thisResp = resp.keys
        actual_state = state > 0
        reward_shown = False
        if thisResp == 'right':
            cont = True
        elif thisResp == 'up' or thisResp == 'down':
            cont = False
            correct, score, txt = reward(thisResp, actual_state, score)
            print(correct, score, txt)
            coin = flipCoin()
            if coin <= EPS:
                state = -1*state
                print(coin,state)
            reward_shown = True
            X_t = getNormallyDistributedRandomNumber(state*DRIFT, SIG)
            stock = X_t
    TextComponent reward_pres
      letterHeight = 0.05
      startVal [condition] = cont == false
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $txt
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    TextComponent second_stock
      letterHeight = 0.05
      startVal [time (s)] = 2
      text [set every repeat] = $stock
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  Routine summary
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        score = 'Total: ' + str(score)
    TextComponent score_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $score
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Flow
  Routine instructions
  LoopInitiator steps loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine presentation
  LoopTerminator steps
  Routine summary
